PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Built_In_Display
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[0,0,0]
  colorSpace = hsv
  expName = BLS_Clickable_Boxes
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Routines
  Routine Stimulus
    ImageComponent Grid
      image = Blank Grid.jpg
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent Square
      fillColor = $[255,0,0]
      fillColorSpace = rgb255
      lineColor = $[255,0,0]
      pos [set every repeat] = $location
      saveStartStop = False
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = height
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  Routine Response
    ImageComponent grid
      image = Blank Grid.jpg
      saveStartStop = False
      size = (1, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent polygon
      fillColor = white
      pos = (-0.386,.3875)
      saveStartStop = False
      shape = rectangle
      size = (0.185, 0.185)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor = white
      pos = (-0.193,0.3875)
      saveStartStop = False
      shape = rectangle
      size = (0.185, 0.185)
      startVal [time (s)] = 0.0
      units = height
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    PolygonComponent polygon_3
      fillColor = white
      pos = [0, 0.3875]
      saveStartStop = False
      shape = rectangle
      size = (0.185, 0.185)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = white
      pos = [0.193, 0.3875]
      saveStartStop = False
      shape = rectangle
      size = (0.185, 0.185)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_5
      fillColor = white
      pos = [0.386, 0.3875]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_6
      fillColor = white
      pos = [-.386, .19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_7
      fillColor = white
      pos = [-0.193, 0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_8
      fillColor = white
      pos = [0, 0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_9
      fillColor = white
      pos = [0.193, 0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_10
      fillColor = white
      pos = [0.386, 0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_11
      fillColor = white
      pos = [-0.386, 0]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_12
      fillColor = white
      pos = [-0.193, 0]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_13
      fillColor = white
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_14
      fillColor = white
      pos = [0.193, 0]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_15
      fillColor = white
      pos = [0.386, 0]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_16
      fillColor = white
      pos = [-0.386, -0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_17
      fillColor = white
      pos = [-0.193, -0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_18
      fillColor = white
      pos = [0, -0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_19
      fillColor = white
      pos = [0.193, -0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_20
      fillColor = white
      pos = [0.386, -0.19415]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_21
      fillColor = white
      pos = [-0.386, -0.3875]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_22
      fillColor = white
      pos = [-0.193, -0.3875]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_23
      fillColor = white
      pos = [0, -0.3875]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_24
      fillColor = white
      pos = [0.193, -0.3875]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_25
      fillColor = white
      pos = [0.386, -0.3875]
      saveStartStop = False
      shape = rectangle
      size = [0.185, 0.185]
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = polygon,polygon_2,polygon_3,polygon_4,polygon_5,polygon_6,polygon_7,polygon_8,polygon_9,polygon_10,polygon_11,polygon_12,polygon_13,polygon_14,polygon_15,polygon_16,polygon_17,polygon_18,polygon_19,polygon_20,polygon_21,polygon_22,polygon_23,polygon_24,polygon_25
      forceEndRoutineOnPress = never
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        squares = [polygon, polygon_2, polygon_3, polygon_4, polygon_5, polygon_6, polygon_7, polygon_8, polygon_9, polygon_10, polygon_11, polygon_12, polygon_13, polygon_14, polygon_15, polygon_16, polygon_17, polygon_18, polygon_19, polygon_20, polygon_21, polygon_22, polygon_23, polygon_24, polygon_25]

        score = 0
        wrongAnswer = 0
      Begin Routine:
        mouse.clickSequence = []

        for square in squares:
            square.draw()
            square.color = 'white'
      Each Frame:
        for square in squares:
            square.draw()
            if mouse.isPressedIn(square) and square.fillColor == 'white':
                square.color = 'black'

        for square in squares:
            if mouse.isPressedIn(square):
                if square.name not in mouse.clickSequence:
                    mouse.clickSequence.append(square.name)
                    thisExp.addData('clickSequence', mouse.clickSequence)
      End Routine:
        if mouse.clickSequence == correct_seq:
            correct = 1
        else:
            correct = 0

        thisExp.addData('seq.corr', correct)

        if correct == 1:
            thisExp.addData('score', 1)
            score = score + 1
            wrongAnswer == 0
        else:
            thisExp.addData('score', 0)
            wrongAnswer +=1
        if wrongAnswer ==2:
            break
    TextComponent resp_cue
      letterHeight = 0.05
      pos = (0.6, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0
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      text:
        SPACE
        to
        Submit
    TextComponent order_cue
      letterHeight = 0.05
      pos = (-0.6, 0.40)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Click
        in
        Reverse
  Routine Ready
    TextComponent rdy_txt
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $rdy_msg
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    KeyboardComponent rdy_key_resp
      allowedKeys = 'space'
      correctAns = y
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    TextComponent instr_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_txt
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    TextComponent cont_text
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $cont_txt
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    KeyboardComponent instr_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Thanks
    TextComponent thx_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Good work! You have completed this task.

        Press SPACE to end.
    KeyboardComponent thx_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator Intro loopType="TrialHandler"
    conditionsFile = BLS_Instructions.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('index', 0), ('instr_txt', 'On this task, you will see a grid and some squares representing locations.\n\nThese locations will be presented one-by-one.'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 1), ('instr_txt', 'When you have seen all the locations, \nclick the locations that you saw starting with the last location and continuing in REVERSE ORDER. '), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 2), ('instr_txt', 'So, if there were 2 locations\nyou would click the second location, then the first location.'), ('cont_txt', 'Press SPACE for more instructions.')]),
      OrderedDict([('index', 3), ('instr_txt', 'Again, click the boxes in reverse order.\n\nThen press SPACE to submit your answer.'), ('cont_txt', 'Press SPACE to begin.')])]
    Routine Instructions
  LoopTerminator Intro
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = BLS_Trials.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Running_Trial_Num', 1), ('trial_length', 2), ('rows', '0, 1'), ('correct_seq', ['polygon_18', 'polygon_10']), ('rdy_msg', 'Press SPACE to begin the next trial.')]),
      OrderedDict([('Running_Trial_Num', 2), ('trial_length', 2), ('rows', '2, 3'), ('correct_seq', ['polygon_19', 'polygon_2']), ('rdy_msg', 'Press SPACE to begin the next trial.')]),
      OrderedDict([('Running_Trial_Num', 3), ('trial_length', 2), ('rows', '4, 5'), ('correct_seq', ['polygon_21', 'polygon_8']), ('rdy_msg', 'Press SPACE to begin the next trial.')]),
      OrderedDict([('Running_Trial_Num', 4), ('trial_length', 2), ('rows', '6, 7'), ('correct_seq', ['polygon_3', 'polygon_7']), ('rdy_msg', 'The next trial will have 3 locations.\n\nPress SPACE to begin.')]),
      OrderedDict([('Running_Trial_Num', 5), ('trial_length', 3), ('rows', '8, 9, 10'), ('correct_seq', ['polygon_22', 'polygon_5', 'polygon_9']), ('rdy_msg', 'Press SPACE to begin the next trial.')]),
      OrderedDict([('Running_Trial_Num', 6), ('trial_length', 3), ('rows', '11, 12, 13'), ('correct_seq', ['polygon_17', 'polygon_24', 'polygon_11']), ('rdy_msg', 'Press SPACE to begin the next trial.')]),
      OrderedDict([('Running_Trial_Num', 7), ('trial_length', 3), ('rows', '14, 15, 16'), ('correct_seq', ['polygon_20', 'polygon_13', 'polygon_1']), ('rdy_msg', 'Press SPACE to begin the next trial.')])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
    LoopInitiator Stimuli loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = BLS_Stimuli.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('span', 2), ('trial', 1), ('stimulus', 1), ('square', 10), ('location', [0.39, 0.195]), ('correct', 18)]),
        OrderedDict([('span', 2), ('trial', 1), ('stimulus', 2), ('square', 18), ('location', [0, -0.195]), ('correct', 10)]),
        OrderedDict([('span', 2), ('trial', 2), ('stimulus', 1), ('square', 2), ('location', [-0.195, 0.39]), ('correct', 19)]),
        OrderedDict([('span', 2), ('trial', 2), ('stimulus', 2), ('square', 19), ('location', [0.195, -0.195]), ('correct', 2)]),
        OrderedDict([('span', 2), ('trial', 3), ('stimulus', 1), ('square', 8), ('location', [0, 0.195]), ('correct', 21)]),
        OrderedDict([('span', 2), ('trial', 3), ('stimulus', 2), ('square', 21), ('location', [-0.39, -0.39]), ('correct', 8)]),
        OrderedDict([('span', 2), ('trial', 4), ('stimulus', 1), ('square', 7), ('location', [-0.195, 0.195]), ('correct', 3)]),
        OrderedDict([('span', 2), ('trial', 4), ('stimulus', 2), ('square', 3), ('location', [0, 0.39]), ('correct', 7)]),
        OrderedDict([('span', 3), ('trial', 1), ('stimulus', 1), ('square', 9), ('location', [0.195, 0.195]), ('correct', 22)]),
        OrderedDict([('span', 3), ('trial', 1), ('stimulus', 2), ('square', 5), ('location', [0.39, 0.39]), ('correct', 5)]),
        OrderedDict([('span', 3), ('trial', 1), ('stimulus', 3), ('square', 22), ('location', [-0.195, -0.39]), ('correct', 9)]),
        OrderedDict([('span', 3), ('trial', 2), ('stimulus', 1), ('square', 11), ('location', [-0.39, 0]), ('correct', 17)])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
      Routine Stimulus
    LoopTerminator Stimuli
    Routine Response
    Routine Ready
  LoopTerminator Trials
  Routine Thanks
