PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Dell Monitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = RPM
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Routines
  Routine Practice_Intro
    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        During this task, you will see words drawn from 6 possible categories:

        Animals: Zebra, Whale, Bear
        Colors: Blue, Red, Yellow
        Countries: Canada, Germany
        Distances: Miles, Inches
        Metals: Aluminum, Iron
        Relatives:Aunt, Father, Daughter

        Press SPACE to continue
  Routine Practice_Intro_2
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Intro_to_Full_Task
    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Did you write down Miles, Iron, and Aunt?

        If so, good work!
        If not, that's okay, keep trying.

        Now we will do a few more.

        Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Ready_Message
    TextComponent Ready_Text
      letterHeight = 0.05
      pos = (0, 0.02)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Rdy_Txt
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine Response
    ImageComponent Blank_Grid
      image = BLS_Images/Blank_Location_Span.jpg
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = routine
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        def defineGrid(nRects):
            gridRows = 5
    PolygonComponent Loc_1
      fillColor = $[1,1,1]
      shape = triangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Stim
    ImageComponent image
      image = None
      size = (1.0, 1.0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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Flow
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = BLS_Choose_Trial.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Trial_File', 'S2T1.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S2T2.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S2T3.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S2T4.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S3T1.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S3T2.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S3T3.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S3T4.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S4T1.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S4T2.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S4T3.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S4T4.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S5T1.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S5T2.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S5T3.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S5T4.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S6T1.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S6T2.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S6T3.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S6T4.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S7T1.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S7T2.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S7T3.csv'), ('Rdy_Txt', None)]),
      OrderedDict([('Trial_File', 'S7T4.csv'), ('Rdy_Txt', None)])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
    LoopInitiator Pictures loopType="TrialHandler"
      conditionsFile = $Trial_File
      loopType = sequential
      nReps = 1
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      Routine Stim
    LoopTerminator Pictures
    Routine Response
    Routine Ready_Message
  LoopTerminator Trials
