PsychoPy2experiment version="3.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = Built_In_Display
  Screen = 1
  Units = height
  Use version = latest
  Window size (pixels) = [1440, 900]
  expName = BLS_grid_and_square
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Routines
  Routine Stimulus
    ImageComponent Grid
      image = Blank Grid.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    PolygonComponent polygon
      fillColor = $[255,0,0]
      lineColor = $[255,0,0]
      pos [set every repeat] = $location
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      units = height
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  Routine Response
  Routine Resp_Rdy_Msg
    TextComponent rdy_msg
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Good work!

        Press SPACE to begin the next trial.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  LoopInitiator Trials loopType="TrialHandler"
    conditionsFile = BLS_Trial_Picker.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Running_Trial_Num', 1), ('trial_length', 2), ('rows', '0, 1')]),
      OrderedDict([('Running_Trial_Num', 2), ('trial_length', 2), ('rows', '2, 3')]),
      OrderedDict([('Running_Trial_Num', 3), ('trial_length', 2), ('rows', '4, 5')]),
      OrderedDict([('Running_Trial_Num', 4), ('trial_length', 2), ('rows', '6, 7')]),
      OrderedDict([('Running_Trial_Num', 5), ('trial_length', 3), ('rows', '8, 9, 10')]),
      OrderedDict([('Running_Trial_Num', 6), ('trial_length', 3), ('rows', '11, 12, 13')]),
      OrderedDict([('Running_Trial_Num', 7), ('trial_length', 3), ('rows', '14, 15, 16')]),
      OrderedDict([('Running_Trial_Num', 8), ('trial_length', 3), ('rows', '17, 18, 19')]),
      OrderedDict([('Running_Trial_Num', 9), ('trial_length', 4), ('rows', '20, 21, 22, 23')]),
      OrderedDict([('Running_Trial_Num', 10), ('trial_length', 4), ('rows', '24, 25, 26, 27')]),
      OrderedDict([('Running_Trial_Num', 11), ('trial_length', 4), ('rows', '28, 29, 30, 31')]),
      OrderedDict([('Running_Trial_Num', 12), ('trial_length', 4), ('rows', '32, 33, 34, 35')]),
      OrderedDict([('Running_Trial_Num', 13), ('trial_length', 5), ('rows', '36, 37, 38, 39, 40')]),
      OrderedDict([('Running_Trial_Num', 14), ('trial_length', 5), ('rows', '41, 42, 43, 44, 45')]),
      OrderedDict([('Running_Trial_Num', 15), ('trial_length', 5), ('rows', '46, 47, 48, 49, 50')]),
      OrderedDict([('Running_Trial_Num', 16), ('trial_length', 5), ('rows', '51, 52, 53, 54, 55')]),
      OrderedDict([('Running_Trial_Num', 17), ('trial_length', 6), ('rows', '56, 57, 58, 59, 60, 61')])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
    LoopInitiator Stimuli loopType="TrialHandler"
      Selected rows = $rows
      conditionsFile = BLS_Trial_List.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('span', 2), ('trial', 1), ('stimulus', 1), ('square', 10), ('location', [0.39, 0.195])]),
        OrderedDict([('span', 2), ('trial', 1), ('stimulus', 2), ('square', 18), ('location', [0, -0.195])]),
        OrderedDict([('span', 2), ('trial', 2), ('stimulus', 1), ('square', 2), ('location', [-0.195, 0.39])]),
        OrderedDict([('span', 2), ('trial', 2), ('stimulus', 2), ('square', 19), ('location', [0.195, -0.195])]),
        OrderedDict([('span', 2), ('trial', 3), ('stimulus', 1), ('square', 8), ('location', [0, 0.195])]),
        OrderedDict([('span', 2), ('trial', 3), ('stimulus', 2), ('square', 21), ('location', [-0.39, -0.39])]),
        OrderedDict([('span', 2), ('trial', 4), ('stimulus', 1), ('square', 7), ('location', [-0.195, 0.195])]),
        OrderedDict([('span', 2), ('trial', 4), ('stimulus', 2), ('square', 3), ('location', [0, 0.39])]),
        OrderedDict([('span', 3), ('trial', 1), ('stimulus', 1), ('square', 9), ('location', [0.195, 0.195])]),
        OrderedDict([('span', 3), ('trial', 1), ('stimulus', 2), ('square', 5), ('location', [0.39, 0.39])]),
        OrderedDict([('span', 3), ('trial', 1), ('stimulus', 3), ('square', 22), ('location', [-0.195, -0.39])]),
        OrderedDict([('span', 3), ('trial', 2), ('stimulus', 1), ('square', 11), ('location', [-0.39, 0])]),
        OrderedDict([('span', 3), ('trial', 2), ('stimulus', 2), ('square', 24), ('location', [0.195, -0.39])]),
        OrderedDict([('span', 3), ('trial', 2), ('stimulus', 3), ('square', 17), ('location', [-0.195, -0.195])])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
      Routine Stimulus
    LoopTerminator Stimuli
    Routine Resp_Rdy_Msg
  LoopTerminator Trials
