PsychoPy2experiment version="3.1.5"
Settings
  Experiment info = {}
  Full-screen window = True
  Monitor = Dell Monitor
  Screen = 1
  Show info dlg = False
  Units = height
  Use version = latest
  Window size (pixels) = [1920, 1080]
  expName = Practice Image
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Routines
  Routine trial
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent Loc_1
      fillColor = $[255,0,0]
      fillColorSpace = rgb255
      lineColor = $[255,0,0]
      shape = rectangle
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
